PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001', 'TLV-device': "['R52R80KXA4W', 'R52N81LPYSF' , 'R52N90V6WZT', 'R52RA06XJ4W']"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = 11_facial_expressions
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent sendTrigger_videos
      Code Type = Py
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      Begin Routine:
        sendTriggerInBothDevices("ID"+ str(expInfo['participant'])+'_'+videos_name)
    MovieComponent movie
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $videos_schaede
      size = (1.78, 1)
      startVal [time (s)] = 0.0
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  Routine end
    CodeComponent end_trigger
      Code Type = Py
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      End Routine:
        sendTriggerInBothDevices("ID"+ str(expInfo['participant'])+'_experiment_end')
    TextComponent thank_you
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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      text:
        Finally - you made it!

        Thank you for your participation!

        :)
  Routine emo_intro_01
    TextComponent intro_emo
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = We will now show you images of faces.
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  Routine fix
    PolygonComponent line_hor_1
      disabled = True
      fillColor = white
      lineWidth = 10
      shape = line
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    PolygonComponent line_ver_1
      disabled = True
      fillColor = white
      lineWidth = 10
      ori = 90
      shape = line
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine t3
    TextComponent three_sec
      disabled = True
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 3
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  Routine t2
    TextComponent two_sec
      disabled = True
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 2
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  Routine t1
    TextComponent one_sec
      disabled = True
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 1
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  Routine image_emo
    ImageComponent image
      disabled = True
      image [set every repeat] = $image_emotion
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine fix_end
    PolygonComponent line_hor_2
      disabled = True
      fillColor = white
      lineWidth = 10
      shape = line
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    PolygonComponent line_ver_2
      disabled = True
      fillColor = white
      lineWidth = 10
      ori = 90
      shape = line
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine blank500
    TextComponent blank_500
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine pause
    TextComponent textPause
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text:
        Do you need a break?

        Press SPACEBAR to continue.
    KeyboardComponent space_continue
      allowedKeys = 'y','n','left','right','space','return'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine emo_i
    PolygonComponent cross_Hline1
      fillColor = white
      lineWidth = 10
      shape = line
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.9833
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    PolygonComponent cross_Vline1
      fillColor = white
      lineWidth = 10
      ori = 90
      shape = line
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.9833
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    TextComponent three1
      letterHeight = 0.1
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.9833
      text = 3
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    TextComponent two1
      letterHeight = 0.1
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 0.9833
      text = 2
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    TextComponent one1
      letterHeight = 0.1
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 0.9833
      text = 1
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    CodeComponent sendTrigger_emo_i
      Code Type = Py
      Begin Routine:
        trigger_sent = False
      Each Frame:
        if t >= 4.0 and not trigger_sent:
            sendTriggerInBothDevices("ID"+ str(expInfo['participant'])+'_'+text_emotion_i)
            trigger_sent = True
    ImageComponent image_emo_only
      image [set every repeat] = $image_emotion
      size = (0.665, 1)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 4.0
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  Routine emo_t
    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        if trials_2.thisTrial['emo_t'] == 0:
            continueRoutine = False
    PolygonComponent cross_Hline2
      fillColor = white
      lineWidth = 10
      shape = line
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.9833
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    PolygonComponent cross_Vline2
      fillColor = white
      lineWidth = 10
      ori = 90
      shape = line
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.9833
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    TextComponent three2
      letterHeight = 0.1
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 0.9833
      text = 3
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    TextComponent two2
      letterHeight = 0.1
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 0.9833
      text = 2
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    TextComponent one2
      letterHeight = 0.1
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 0.9833
      text = 1
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    CodeComponent sendTrigger_emo_t
      Code Type = Py
      Begin Routine:
        trigger_sent = False
      Each Frame:
        if t >= 4.0 and not trigger_sent:
            sendTriggerInBothDevices("ID"+ str(expInfo['participant'])+'_'+text_emotion_t)
            trigger_sent = True
    TextComponent emotion_only
      letterHeight = 0.1
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $text_emotion
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  Routine emo_it
    CodeComponent code_3
      Code Type = Py
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      Begin Routine:
        if trials_2.thisTrial['emo_it'] == 0:
            continueRoutine = False
    PolygonComponent cross_Hline3
      fillColor = white
      lineWidth = 10
      shape = line
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.9833
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    PolygonComponent cross_Vline3
      fillColor = white
      lineWidth = 10
      ori = 90
      shape = line
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.9833
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    TextComponent three3
      letterHeight = 0.1
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 0.9833
      text = 3
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    TextComponent two3
      letterHeight = 0.1
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 0.9833
      text = 2
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    TextComponent one
      letterHeight = 0.1
      startVal [time (s)] = 4.0
      stopVal [duration (s)] = 0.9833
      text = 1
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    ImageComponent image_emotion_2
      image [set every repeat] = $image_emotion_cropped
      pos = (0, -0.3)
      size = (0.532, 0.8)
      startVal [time (s)] = 5.0
      stopVal [duration (s)] = 4
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    CodeComponent sendTrigger_emo_it
      Code Type = Py
      Begin Routine:
        trigger_sent = False
      Each Frame:
        if t >= 4.0 and not trigger_sent:
            sendTriggerInBothDevices("ID"+ str(expInfo['participant'])+'_'+text_emotion_it)
            trigger_sent = True
    TextComponent title_emotion
      letterHeight = 0.1
      pos = (0, 0.2)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 4
      text [set every repeat] = $text_emotion
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  Routine exp_emo_t
    CodeComponent code_6
      Code Type = Py
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      Begin Routine:
        if trials_2.thisTrial['emo_t'] == 0:
            continueRoutine = False
    CodeComponent sendTriggerEmoT
      Code Type = Auto->JS
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      Begin Routine:
        if trials_2.thisTrial['emo_t'] == 1:
            sendTriggerInBothDevices("expl_emo_t")
    TextComponent text_4
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 8
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      text:
        You will be shown a word describing an emotion.

        Immediately upon seeing the word, portray the emotion with your corresponding facial expression.
    MovieComponent v_text_title
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = text_title.mp4
      size = (1.78, 1.0)
      startVal [time (s)] = 0.5
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  Routine exp_emo_i
    CodeComponent sendTriggerEmoI
      Code Type = Auto->JS
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      Begin Routine:
        sendTriggerInBothDevices("expl_emo_i")
    TextComponent exp_i
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 15
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      text:
        You will be shown images of
        facial expressions.

        Please imitate the facial expressions immediately upon seeing the image.

        Relax upon seeing a white cross.
  Routine exp_emo_it
    CodeComponent code_4
      Code Type = Py
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      Begin Routine:
        if trials_2.thisTrial['emo_it'] == 0:
            continueRoutine = False
    CodeComponent sendTriggerEmoIT
      Code Type = Auto->JS
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      Begin Routine:
        if trials_2.thisTrial['emo_it'] == 1:
            sendTriggerInBothDevices("expl_emo_it")
    TextComponent text_3
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 20.0
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      text:
        You will be shown a word describing an emotion, and an example of a person expressing this emotion.


        Immediately upon seeing the word and picture, portray the emotion with your corresponding facial expression.
    MovieComponent v__text_it
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = text_emotion_title.mp4
      size = (1.78, 1.0)
      startVal [time (s)] = 0.5
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  Routine start
    TextComponent textWelcome1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Experiment!

        Press SPACEBAR to begin.
    KeyboardComponent SpaceBarStart
      allowedKeys = 'y','n','left','right','space','return'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine init
    CodeComponent conditions
      Code Type = Py
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      Begin Experiment:
        participant_id = int(expInfo['participant'])
        if participant_id % 2 == 0:  # even participant ID
            conditions_file = 'routine_order_even.xlsx'
        else:  # odd participant ID
            conditions_file = 'routine_order_odd.xlsx'

        sequence_i = participant_id % 7
        if sequence_i == 0:
            sequence_i = 7

        sequence_t = sequence_i + 1 if sequence_i < 7 else 1
        sequence_it = sequence_t + 1 if sequence_t < 7 else 1

        file_sequence_i = f'images_texts_emotions_sequence_{sequence_i}.xlsx'
        file_sequence_t = f'images_texts_emotions_sequence_{sequence_t}.xlsx'
        file_sequence_it = f'images_texts_emotions_sequence_{sequence_it}.xlsx'
    CodeComponent TLV_EMG
      Code Type = Py
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      Begin Experiment:
        import uiautomator2
        from threading import Thread

        # print screen in adb : adb exec-out screencap -p > screen.png
        # in case of app update, if I need to see the XML of application screen layout:
        # adb shell uiautomator dump
        # adb pull /sdcard/window_dump.xml
        # search clickable="true" in the XML.


        # check this on psychopy inside the lab with 2 deivces connected with a usb hub.

        # devices = "R52N81LPYSF" , "R52N90V6WZT", "R52RA06XJ4W"
        #deviceSerial = settingsInfo["TLV-device"]
        deviceSerial = str(expInfo["TLV-device"])
        devices = [uiautomator2.Device(deviceSerial)];

        add_button_id = "com.xtrodes.xtrodesapp:id/btn_add"

        def addFirstEventContainer(device):
            new_event = device(resourceId=add_button_id)[0];
            new_event.click();

        def returnToEventScreen(device):
            sideBar_dashboard_btn = device(resourceId="com.xtrodes.xtrodesapp:id/container")[0];
            sideBar_dashboard_btn.click();
            eventlog_btn = device(resourceId="com.xtrodes.xtrodesapp:id/btn_event_log")[0];
            eventlog_btn.click();

        def PrepareEventTextAndButton(device, text):
            add_buttons = device(resourceId=add_button_id);
            if (add_buttons.count == 0):
                returnToEventScreen(device);
                add_buttons = device(resourceId=add_button_id);

            if (add_buttons.count == 1):
                addFirstEventContainer(device);
                add_buttons = device(resourceId=add_button_id);

            send_event = add_buttons[1];
            event_text = device(resourceId="com.xtrodes.xtrodesapp:id/et_name")[0];
            event_text.set_text(text);

            return send_event;


        def ButtonClickThread(button):
            button.click()

        def sendTriggerInBothDevices(text):
            buttons = [PrepareEventTextAndButton(device, text) for device in devices]
            [Thread(target=ButtonClickThread, args=(x,)).start() for x in buttons];

        #sendTriggerInBothDevices("Init Sequence");

        sendTriggerInBothDevices('ID'+ str(expInfo['participant']))
    CodeComponent test_trigger
      Code Type = Py
      disabled = True
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      Begin Experiment:
        def sendTriggerInBothDevices(input):
            print(input)
  Routine pause_t
    CodeComponent code_7
      Code Type = Py
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      Begin Routine:
        if trials_2.thisTrial['emo_t'] == 0:
            continueRoutine = False
    TextComponent breakText
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text:
        Break

        Press SPACEBAR to continue.
    KeyboardComponent keyPress
      allowedKeys = 'y','n','left','right','space','return'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine pause_it
    CodeComponent code_5
      Code Type = Py
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      Begin Routine:
        if trials_2.thisTrial['emo_it'] == 0:
            continueRoutine = False
    TextComponent textbreak
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text:
        Break

        Press SPACEBAR to continue.
    KeyboardComponent presskey
      allowedKeys = 'y','n','left','right','space','return'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine QA
    CodeComponent qa_trigger
      Code Type = Py
      Begin Routine:
        sendTriggerInBothDevices("ID"+ str(expInfo['participant'])+'_'+"fill_questionnaire_emotion")
    TextComponent qa_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Fill in the questionnaire
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    KeyboardComponent key_resp
      allowedKeys = 'up','down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_continue
      letterHeight = 0.03
      pos = (0, -0.2)
      startVal [time (s)] = 60
      text = Press up or down arrow to continue
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Flow
  Routine start
  Routine init
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = videos_schaede.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'videos_schaede': 'schaede-cut-tlv/02_Introduction.mp4', 'videos_name': 'Introduction'},
      {'videos_schaede': 'schaede-cut-tlv/03_Face_at_rest.mp4', 'videos_name': 'Face_at_rest'},
      {'videos_schaede': 'schaede-cut-tlv/04_Forehead_demonstration.mp4', 'videos_name': 'Forehead_demonstration'},
      {'videos_schaede': 'schaede-cut-tlv/05_Forehead.mp4', 'videos_name': 'Forehead'},
      {'videos_schaede': 'schaede-cut-tlv/06_Eye_gentle_demonstration.mp4', 'videos_name': 'Eye_gentle_demonstration'},
      {'videos_schaede': 'schaede-cut-tlv/07_Eye_gentle.mp4', 'videos_name': 'Eye_gentle'},
      {'videos_schaede': 'schaede-cut-tlv/08_Eye_tight_demonstration.mp4', 'videos_name': 'Eye_tight_demonstration'},
      {'videos_schaede': 'schaede-cut-tlv/09_Eye_tight.mp4', 'videos_name': 'Eye_tight'},
      {'videos_schaede': 'schaede-cut-tlv/10_Break_1.mp4', 'videos_name': 'Break_1'},
      {'videos_schaede': 'schaede-cut-tlv/11_Nose_demonstration.mp4', 'videos_name': 'Nose_demonstration'},
      {'videos_schaede': 'schaede-cut-tlv/12_Nose.mp4', 'videos_name': 'Nose '},
      {'videos_schaede': 'schaede-cut-tlv/13_Smile_closed_demonstration.mp4', 'videos_name': 'Smile_closed_demonstration'},
      {'videos_schaede': 'schaede-cut-tlv/14_Smile_closed.mp4', 'videos_name': 'Smile_closed'},
      {'videos_schaede': 'schaede-cut-tlv/15_Smile_open_demonstration.mp4', 'videos_name': 'Smile_open_demonstration'},
      {'videos_schaede': 'schaede-cut-tlv/16_Smile_open.mp4', 'videos_name': 'Smile_open'},
      {'videos_schaede': 'schaede-cut-tlv/17_Break_2.mp4', 'videos_name': 'Break_2'}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
    Routine trial
  LoopTerminator trials
  Routine end
